path = getArgument();
arg = File.getName(path);

if(name=="") exit ("No argument");

//arg = "/Users/wilsonlab/Desktop/Registration/Reformatted/FB8A_R31B12AD_R65C03GDBD_1/FB8AH_R31B12AD_R65C03GDBD_composite.tif";
//name = File.getName(arg);

//get folder path
parent_path = File.getParent(arg); 

//gets the file list in the parent folder
file_list = getFileList(parent_path);

//initialize a place to store the name of the .tif file you want to open
to_composite = ""; 

//goes through the file list and sees what file ends with .tif and opens that file
for (i = 0; i < file_list.length; i++) {
	//checks if given file has .tif extension or jpg or png
	tif_exists = matches(file_list[i], ".*\\.(jpg|png|tif)$");
	if(tif_exists == 1){
		//create the full path that will point to correct .tif file
		full_path = parent_path + "/" + file_list[i];
		//opens .tif file
		open(full_path);
		//assigns the name of the file to a variable 
		to_composite = file_list[i];
	}else if ((i == file_list.length - 1) && to_composite == ""){
		//will exit the macro if the for loop has iterated through all files and has not assigned the to_composite variable - meaning there is no .tif file
		exit("no .tif files");
	}
}

//select the open window
selectWindow(to_composite);

//run max z projection on the to_composite file
run("Z Project...", "projection=[Max Intensity]");

save_name = "MAX_" + to_composite;
//save as a .tif file with MAX_ and then original name
saveAs("Tiff", parent_path + "/" + save_name);
close();

//select original window and close
selectWindow(to_composite);
close();
